graphs:

  - id: emotiv
    nodes:
    - id: raw
      module: timeflux.nodes.lsl
      class: Receive
      params:
        prop: name
        value: EmotivDataStream-EEG
        sync: network
    - id: motion
      module: timeflux.nodes.lsl
      class: Receive
      params:
        prop: name
        value: EmotivDataStream-Motion
        sync: network
    - id: eeg_quality
      module: timeflux.nodes.lsl
      class: Receive
      params:
        prop: name
        value: EmotivDataStream-EEG-Quality
        sync: network
    - id: contact_quality
      module: timeflux.nodes.lsl
      class: Receive
      params:
        prop: name
        value: EmotivDataStream-Contact-Quality
        sync: network
    - id: publish_raw
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: raw
    - id: publish_filtered
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: filtered
    - id: publish_motion
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: motion
    - id: publish_eeg_quality
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: eeg_quality
    - id: publish_contact_quality
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: contact_quality
    - id: dejitter
      module: timeflux.nodes.dejitter
      class: Reindex
    - id: bandpass
      module: timeflux_dsp.nodes.filters
      class: IIRFilter
      params:
        filter_type: bandpass
        frequencies: [0.1, 40]
        order: 2
    edges:
      - source: raw
        target: dejitter
      - source: dejitter
        target: bandpass
      - source: bandpass
        target: publish_filtered
      - source: raw
        target: publish_raw
      - source: motion
        target: publish_motion
      - source: eeg_quality
        target: publish_eeg_quality
      - source: contact_quality
        target: publish_contact_quality
    rate: 10