graphs:
  - id: emotiv
    nodes:
    - id: raw
      module: timeflux.nodes.lsl
      class: Receive
      params:
        prop: name
        value: EmotivDataStream-EEG
    - id: publish_raw
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: raw
    - id: publish_filtered
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: filtered
    - id: select
      module: timeflux.nodes.query
      class: LocQuery
      params:
        key: [AF3, AF4, T7, T8, Pz]
    - id: dejitter
      module: timeflux.nodes.dejitter
      class: Reindex
    - id: bandpass
      module: timeflux_dsp.nodes.filters
      class: IIRFilter
      params:
        filter_type: bandpass
        frequencies: [0.1, 40]
        order: 2
    edges:
      - source: raw
        target: select
      - source: select
        target: dejitter
      - source: dejitter
        target: bandpass
      - source: bandpass
        target: publish_filtered
      - source: raw
        target: publish_raw
    rate: 10
